# Generated by Configurator on Thu Apr 28 14:54:35 BST 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,Camera-Prime95B,PVCAM,Camera-1
Device,E-709_PIFOC,PI_GCS_2,E-709
Device,PIZStage,PI_GCS_2,PIZStage

# Pre-init settings for devices
Property,E-709_PIFOC,Port,COM6
Property,PIZStage,Alternative Homing Command,
Property,PIZStage,Axis,z
Property,PIZStage,Controller Name,E-709_PIFOC
Property,PIZStage,Invert travel range,0
Property,PIZStage,Limit_um,500.0000
Property,PIZStage,Stage,

# Pre-init settings for COM ports
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,PIZStage,0

# Roles
Property,Core,Camera,Camera-Prime95B
Property,Core,Focus,PIZStage
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Servo control activated Z Stage
# Preset: NewPreset
ConfigGroup,Servo control activated Z Stage,NewPreset,PIZStage,Servo control activated (SVO),1


# Group: Home Z Stage
# Preset: NewPreset
ConfigGroup,Home Z Stage,NewPreset,PIZStage,HOMING,0


# Group: Channel

# Group: System
# Preset: Startup


# Group: Velocity Z Stage
# Preset: NewPreset
ConfigGroup,Velocity Z Stage,NewPreset,PIZStage,Velocity,10000.0000


# Group: Position Z Stage
# Preset: NewPreset
ConfigGroup,Position Z Stage,NewPreset,PIZStage,Position,0.0079



# PixelSize settings

